// Parameter file created by ElastixParameterFile module

// Registration parameters
(Registration "MultiResolutionRegistration")
(FixedImageDimension 3)
(MovingImageDimension 3)
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(NumberOfResolutions 3)
(ErodeFixedMask "false" "false" "false")
(ErodeMovingMask "false" "false" "false")

// Transform parameters
(Transform "BSplineTransform")
(HowToCombineTransforms "Compose")
(FinalGridSpacingInPhysicalUnits 16.0 16.0 16.0)
(GridSpacingSchedule 4 4 4 2 2 2 1 1 1)
(PassiveEdgeWidth 0.0 0.0 0.0)

// Metric parameters
(Metric "AdvancedNormalizedCorrelation")
(ShowExactMetricValues "false" "false" "false")
(CheckNumberOfSamples "false" "false" "false")
(RequiredRatioOfValidSamples 0.25)
(SubtractMean "true")
(FixedKernelBSplineOrder 0 0 0)
(FixedLimitRangeRatio 0.01 0.01 0.01)
(MovingKernelBSplineOrder 3 3 3)
(MovingLimitRangeRatio 0.01 0.01 0.01)
(UseFastAndLowMemoryVersion "true")

// Optimizer parameters
(Optimizer "AdaptiveStochasticGradientDescent")
(NewSamplesEveryIteration "true")
(MaximumNumberOfIterations 300 200 200)
(MaximumNumberOfSamplingAttempts 0 0 0)
(AutomaticParameterEstimation "true")
(SigmoidInitialTime 0.0 0.0 0.0)
(UseAdaptiveStepSizes "true")
(NumberOfSamplesForExactGradient 100000)

// Interpolator parameters
(Interpolator "BSplineInterpolator")
(BSplineInterpolationOrder 1 1 1)

// ResampleInterpolator parameters
(ResampleInterpolator "FinalBSplineInterpolator")
(FinalBSplineInterpolationOrder 3)

// ImageSampler parameters
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 4096 4096 4096)
(UseRandomSampleRegion "false")
(FixedImageBSplineInterpolationOrder 1 1 1)

// FixedImagePyramid parameters
(FixedImagePyramid "FixedRecursiveImagePyramid")

// MovingImagePyramid parameters
(MovingImagePyramid "MovingRecursiveImagePyramid")

(WritePyramidImagesAfterEachResolution "false")

// Resampler parameters
(Resampler "DefaultResampler")
(WriteResultImage "true")
(CompressResultImage "false")
(ResultImageFormat "nii")
(ResultImagePixelType "double")
(WriteResultImageAfterEachResolution "false")

(UseDirectionCosines "true")
